PsychoPy2experiment version="2020.1.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = AOC
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = trk-encoding
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Routines
  Routine trials_run_1
    ImageComponent main_image
      image [set every repeat] = $TripletMemberA
      pos [set every repeat] = (Xcoordinate,Ycoordinate)
      size = (300, 300)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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  Routine select_stimuli_table
    TextComponent setup_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = A vizsgálati változók beállítása...
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        stimuli_table = 'encoding_table.csv'
Flow
  Routine select_stimuli_table
  LoopInitiator run_1 loopType="TrialHandler"
    Selected rows = 0:83
    conditionsFile = $stimuli_table
    loopType = sequential
    nReps = 1
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    Routine trials_run_1
  LoopTerminator run_1
